CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<Row>[0-9]{2})c(?P<Col>[0-9]{2})f(?P<Site>[0-9]{2,3})p01-ch(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2")
    Name to assign these images:Alexa568
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch3")
    Name to assign these images:Alexa488
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch4")
    Name to assign these images:Alexa647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):80,240
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.003,1.0
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Alexa488
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectIntensity:[module_num:7|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
    Hidden:1
    Select an image to measure:Hoechst
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:8|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
    Hidden:3
    Select an image to measure:Alexa488
    Select an image to measure:Alexa568
    Select an image to measure:Alexa647
    Select objects to measure:Cells

MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Calculate the Zernike features?:No

MeasureTexture:[module_num:10|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
    Hidden:3
    Hidden:1
    Hidden:1
    Select an image to measure:Alexa488
    Select an image to measure:Alexa568
    Select an image to measure:Alexa647
    Select objects to measure:Cells
    Texture scale to measure:3
    Measure images or objects?:Both

MeasureTexture:[module_num:11|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:Hoechst
    Select objects to measure:Nuclei
    Texture scale to measure:3
    Measure images or objects?:Both

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:Nuclei
    Name the output image:NucleiImage
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:NucleiImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hoechst
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|data/Lassi/Ruth/20220401/new_analyse/segm_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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